CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:2
HasImagePlaneDetails:False

IdentifyPrimaryObjects:[module_num:1|svn_version:'Unknown'|variable_revision_number:15|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:2|svn_version:'Unknown'|variable_revision_number:10|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:15
    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
    Discard the associated primary objects?:No
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Minimum Cross-Entropy
